CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Channel": "none", "Date": "text", "FileLocation": "text", "Frame": "none", "Plate": "text", "Series": "none", "Time": "none", "Well": "text"}
    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>.*)_[0-9]{2}_[0-9]_[0-9]_(?P<Channel>.*)_[0-9]{3}.tif$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Date>[0-9]{6})_(?P<Time>[0-9]{6})_(?P<Plate>Plate [0-9]{1})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Blue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,17
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.27,.9
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Green
    Name the primary objects to be identified:Infection
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.35
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.25,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:120
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    Thresholding method:Otsu

RelateObjects:[module_num:7|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
    Parent objects:Infection
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:InfectedNuclei
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
ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|H:\\Davey Lab
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Metadata_Plate,Image|Metadata_Well,Image|Count_Nuclei,Image|Count_Infection,Image|Count_InfectedNuclei,Nuclei|Number_Object_Number,InfectedNuclei|Number_Object_Number,Infection|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:syncitia_pipeline
    Overwrite existing files without warning?:No
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